PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SyncBoxDemo 2.0
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        Welcome!
        This is a simple demo, counting MR-Triggers with the NordicNeuroLab SyncBox.
  Routine sync_box_trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from NordicNeuroLab import SyncBox

        sync_box = SyncBox(
            num_volumes = 8,
            num_slices = 1,
            trigger_slice = 1,
            trigger_volume = 1,
            pulse_length = 1000,
            TR_time = 1000,
            optional_trigger_slice = 0,
            optional_trigger_volume = 0,
            simulation = True)



        win.color = "blue"
      Begin Routine:
        sync_box.start()
        is_complete = False
        num_expected_triggers = 8
        trigger_count = 0
        trigger_text = "Waiting for first trigger"
      Each Frame:
        buffer = sync_box.readCurrentInputBuffer()

        if "s" in buffer:
            trigger_count += 1

        if trigger_count == num_expected_triggers:
            is_complete = True
            continueRoutine = False


        trigger_text = f"Trigger Count = {trigger_count}"
      End Experiment:
        sync_box.stop()
        sync_box.close()
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = is_complete
      text [set every frame] = $trigger_text
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        Goodbye!
Flow
  Routine welcome
  Routine sync_box_trial
  Routine goodbye
